CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:Ecad
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:Rab11
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "watershed")
    Name to assign these images:cells
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:Bazooka_mut
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:cells
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):1,1000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.001
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
MeasureObjectIntensity:[module_num:6|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
    Select images to measure:Bazooka_mut, Rab11
    Select objects to measure:cells

FilterObjects:[module_num:7|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
    Select the objects to filter:cells
    Name the output objects:controlCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:bazookaMutCells
    Select the measurement to filter by:Intensity_MeanIntensity_Bazooka_mut
    Filter using a minimum measurement value?:Yes
    Minimum value:0.15
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:Rab11
    Select objects to measure:bazookaMutCells, controlCells

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:bazookaMutCells
    Name the output image:bazookaMutCells
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:10|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
    Select the input objects:controlCells
    Name the output image:controlCells
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:controlCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Bazooka_mut
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_control_cells
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:bazookaMutCells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Bazooka_mut
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mut_cells
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:bazookaMutCells|Intensity_MeanIntensity_Rab11,controlCells|Intensity_MeanIntensity_Rab11
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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