CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ecad")
    Name to assign these images:Ecad
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "f8")
    Name to assign these images:F8
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "watershed")
    Name to assign these images:cells
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:cells
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):1,1000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.001
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
MeasureObjectIntensity:[module_num:6|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
    Select images to measure:Ecad
    Select objects to measure:cells

MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:8|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
    Select the objects to filter:cells
    Name the output objects:lowecadcells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensityEdge_Ecad
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.4
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:750
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:9|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
    Select images to measure:F8
    Select objects to measure:lowecadcells

FilterObjects:[module_num:10|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
    Select the objects to filter:lowecadcells
    Name the output objects:highf8
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:lowf8
    Select the measurement to filter by:Intensity_MeanIntensity_F8
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:lowf8
    Name the output image:Lowf8cells
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:highf8
    Name the output image:highf8cells
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:Lowf8cells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ecad
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_lowf8
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:highf8cells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ecad
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_highf8
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:Ecad
    Select objects to measure:highf8, lowf8

ExpandOrShrinkObjects:[module_num:16|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
    Select the input objects:highf8
    Name the output objects:ShrunkenHighF8
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:8
    Fill holes in objects so that all objects shrink to a single point?:No

ExpandOrShrinkObjects:[module_num:17|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
    Select the input objects:lowf8
    Name the output objects:ShrunkenLowF8
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:8
    Fill holes in objects so that all objects shrink to a single point?:No

MeasureObjectIntensity:[module_num:18|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
    Select images to measure:Ecad
    Select objects to measure:ShrunkenHighF8, ShrunkenLowF8

ConvertObjectsToImage:[module_num:19|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
    Select the input objects:ShrunkenHighF8
    Name the output image:ShrunkenHighF8Cells
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:20|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
    Select the input objects:ShrunkenLowF8
    Name the output image:ShrunkenLowF8Cells
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:ShrunkenHighF8Cells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ecad
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ShrunkenHighF8Cells
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:ShrunkenLowF8Cells
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ecad
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ShrunkenLowF8Cells
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:ShrunkenLowF8|Intensity_MeanIntensity_Ecad,lowf8|Intensity_MeanIntensityEdge_Ecad,highf8|Intensity_MeanIntensityEdge_Ecad,ShrunkenHighF8|Intensity_MeanIntensity_Ecad
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:highf8
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:lowf8
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ShrunkenHighF8
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ShrunkenLowF8
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
